Journal

Version VersionNumber=2.4
Open
  stImageNames = "D:\Users\JohnE\VisualBasicTests\ROIMask1.tif"
  nImageSetNumbers = -1
  loadImage = "Open"
Open
  stImageNames = "D:\Users\JohnE\VisualBasicTests\ROIMask2.tif"
  nImageSetNumbers = -1
  loadImage = "Open"
Arithmetic
  iOperation = 1
  iSecondSource = 1
  nNumerator = 1
  nDenominator = 1
  nResultDepth = 16
  imSource1 = m 1 7 9 0 1 1 0 8 ROIMask1
  imSource2 = m 1 3 9 0 1 -1 -1 8 ROIMask2
  imDest = "Add"
Close
  im = m 1 7 9 0 1 2 0 8 ROIMask2
  bSaveIt = FALSE
Close
  im = m 1 7 9 0 1 1 0 8 ROIMask1
  bSaveIt = FALSE
Open
  stImageNames = "D:\Users\JohnE\VisualBasicTests\ROIMask3.tif"
  nImageSetNumbers = -1
  loadImage = "Open"
Arithmetic
  iOperation = 1
  iSecondSource = 1
  nNumerator = 1
  nDenominator = 1
  nResultDepth = 16
  imSource1 = m 1 3 9 0 1 -1 -1 8 ROIMask3
  imSource2 = m 1 7 9 0 1 3 0 3 Add
  imDest = "Add"
Close
  im = m 1 7 9 0 1 6 0 8 ROIMask3
  bSaveIt = FALSE
Open
  stImageNames = "D:\Users\JohnE\VisualBasicTests\ROIMask4.tif"
  nImageSetNumbers = -1
  loadImage = "Open"
Arithmetic
  iOperation = 1
  iSecondSource = 1
  nNumerator = 1
  nDenominator = 1
  nResultDepth = 16
  imSource1 = m 1 3 9 0 1 -1 -1 8 ROIMask4
  imSource2 = m 1 7 9 0 1 7 0 5 Add-2
  imDest = "Add"
Close
  im = m 1 7 9 0 1 9 0 8 ROIMask4
  bSaveIt = FALSE
Close
  im = m 1 7 9 0 1 7 0 5 Add-2
  bSaveIt = FALSE
Close
  im = m 1 7 9 0 1 3 0 3 Add
  bSaveIt = FALSE
Open
  stImageNames = "D:\Users\JohnE\VisualBasicTests\ROIMask5.tif"
  nImageSetNumbers = -1
  loadImage = "Open"
Arithmetic
  iOperation = 1
  iSecondSource = 1
  nNumerator = 1
  nDenominator = 1
  nResultDepth = 16
  imSource1 = m 1 3 9 0 1 -1 -1 8 ROIMask5
  imSource2 = m 1 7 9 0 1 10 0 5 Add-3
  imDest = "Add"
Save As
  imSave = m 1 3 9 0 1 -1 -1 15 TileTestMasked2
  fSpec = "D:\Users\JohnE\VisualBasicTests\TileTestMasked2.tif"
  nParm = 2
  m_formatID = 0
Close
  im = m 1 3 9 0 1 -1 -1 15 TileTestMasked2
  bSaveIt = FALSE
Close
  im = m 1 7 9 0 1 14 0 8 ROIMask5
  bSaveIt = FALSE
Close
  im = m 1 7 9 0 1 10 0 5 Add-3
  bSaveIt = FALSE
