Journal

Version VersionNumber=2.4
Threshold Image
  srcThresh = m 1 5 9 0 1 -1 -1 5 Tile0
  min = 1
  max = 2
  bMore = FALSE
  idxState = 1
  nTab = 1
  nMinMaxRange = 5
  bTransparentThresh = FALSE
  dTransparencyPct = 0.5
  byThreshRed = 255
  byThreshGreen = 128
  byThreshBlue = 64
  nThreshDisplayMode = 1
Targeted Illumination Update Mask
  PositionSetting = 4
Targeted Illumination
  IlluminationSetting = "mosaic"
  CoordinateSetting = "20X mosaic"
  PositionSetting = 4
  PositionImageCoordinatesX = 100
  PositionImageCoordinatesY = 100
  NumberOfLaserFires = 1
  NeutralDensitySetting = 5
  dExpDurMS = 20000
